<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="100" y="100" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>6070740</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="1000"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="1.89197512689" TargetVolume="4"/>
   </Plugin>
   <Plugin Name="Surface">
      <SurfaceEnergyParameters CellType="1" LambdaSurface="1.1286550681" TargetSurface="16"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">6.87861054322</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">27.5758962363</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1</types>
      <ncells>157</ncells>
   </Steppable>
</CompuCell3D>
